PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': 'Your Name', 'Sex (M,F)': '', 'Age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Prototype
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Routines
  Routine ShowImage
    ImageComponent image_2
      image [set every repeat] = $ImageSetShow
      size = (1, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine Break
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Break
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  Routine ShowAnsImage
    ImageComponent image
      image [set every repeat] = $ImageAnsShow
      size = (1.0, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine Ans
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        New ’n’

        or

        Old ‘o’
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'o','n'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Break_2
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Press ’o’ when seeing the same person with the same expression

        Press ’n’ when seeing the same person with different expression

        Press ‘space’ when ready
    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break_3
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = Get ready for the next set
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  Routine Thank
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you!
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  Routine Intro
    TextComponent intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        6 sets of pictures will be shown.

        After you look at the pictures of people with different expression, you will be asked to identify the pictures from the shown pictures.

        Press ’o’ if you see the same person with the same expression

        Press ’n’ if you see the same person with the different expression

        Press ’space’ to start the experiment
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Countdown
    TextComponent count3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = 3
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    TextComponent count2
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = 2
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    TextComponent Count1
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = 1
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    TextComponent CountGo
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = Go
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Flow
  Routine Intro
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = ImageList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'PicSet': 'ImageShowSet1.xlsx', 'AnsSet': 'ImageAnsSet1.xlsx'},
      {'PicSet': 'ImageShowSet2.xlsx', 'AnsSet': 'ImageAnsSet2.xlsx'},
      {'PicSet': 'ImageShowSet3.xlsx', 'AnsSet': 'ImageAnsSet3.xlsx'},
      {'PicSet': 'ImageShowSet4.xlsx', 'AnsSet': 'ImageAnsSet4.xlsx'},
      {'PicSet': 'ImageShowSet5.xlsx', 'AnsSet': 'ImageAnsSet5.xlsx'},
      {'PicSet': 'ImageShowSet6.xlsx', 'AnsSet': 'ImageAnsSet6.xlsx'}]
    Routine Countdown
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = $PicSet
      loopType = random
      nReps = 1
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      Routine ShowImage
    LoopTerminator trials_2
    Routine Break_2
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $AnsSet
      loopType = random
      nReps = 1
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      Routine ShowAnsImage
      Routine Ans
    LoopTerminator trials
  LoopTerminator trials_3
  Routine Thank
